PsychoPy2experiment version="2021.1.2"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = AdultStudyPractice
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Routines
  Routine Familiarization
    SoundComponent familiarization_sound
      sound = /Users/emilymarks/Desktop/AdultStudies/Familiarization/Language1Order1.wav
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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  Routine Instructions
    TextComponent Participant_Instructions
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = When you are ready, press the space bar and listen to the sound that is played. Once the sound is done, press the space bar again. 
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Test
    SoundComponent Test_Sounds
      sound [set every repeat] = $sounds1
      startVal [time (s)] = .5
      stopVal [duration (s)] = 10
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    SoundComponent Test_Sounds2
      sound [set every repeat] = $sounds2
      startVal [time (s)] = 2.16
      stopVal [duration (s)] = 10
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    KeyboardComponent key_resp_4
      allowedKeys [set every repeat] = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 10
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    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 2.8
      stopVal [duration (s)] = 10
      text [set every repeat] = Press f for the first sound, press j for the second sound
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  Routine Instructions2
    TextComponent Instructions_TestTrials
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Listen to the following sounds and determine which sound is most similiar to the first sound you heard.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Response
    KeyboardComponent key_resp_2
      allowedKeys = 'f','j'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_response
      letterHeight = 0.1
      startVal [time (s)] = 0
      text = Which sound did you hear originally? Press “f” for the first sound and “j” for the second sound.
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  Routine Test2
    SoundComponent sound_2
      sound [set every repeat] = $sounds2
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 10
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Flow
  Routine Instructions
  Routine Familiarization
  Routine Instructions2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'sounds1': 'TestTrials/bidabu.wav', 'sounds2': 'TestTrials/labubi.wav', 'type': 'words'},
      {'sounds1': 'TestTrials/bidaku.wav', 'sounds2': 'TestTrials/labupa.wav', 'type': 'words'},
      {'sounds1': 'TestTrials/dotigo.wav', 'sounds2': 'TestTrials/godabu.wav', 'type': 'words'},
      {'sounds1': 'TestTrials/dotitu.wav', 'sounds2': 'TestTrials/godaku.wav', 'type': 'words'}]
    Routine Test
  LoopTerminator trials
